PsychoPy2experiment version="2021.1.4"
Settings
  Data file delimiter = semicolon
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'id': '', 'Sex': "['male', 'female']", 'Age*': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2021.1.4
  Window size (pixels) = [1600, 900]
  expName = test
  logging level = debug
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Routines
  Routine trial
    KeyboardComponent key_resp_5
      allowedKeys = 'period', 'slash'
      correctAns = 'period', 'slash'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = all keys
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        hist7 = ''
        hist6 = ''
        hist5 = ''
        hist4 = ''
        hist3 = ''
        hist2 = ''
        hist1 = ''
      Begin Routine:
        keysLenOld = 0
      Each Frame:
        keysLen = len(key_resp_5.keys)
        if keysLen > keysLenOld:
            if key_resp_5.keys[keysLen - 1] == 'slash':
                text = 'R'
            elif key_resp_5.keys[keysLen - 1] == 'period':
                text = 'O'

            hist7 = hist6
            hist6 = hist5
            hist5 = hist4
            hist4 = hist3
            hist3 = hist2
            hist2 = hist1
            hist1 = text
            keysLenOld = keysLen
    PolygonComponent polygon
      fillColor = red
      lineColor = red
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $hist1
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    TextComponent text_3
      letterHeight = 0.1
      pos = (-.1, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $hist2
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    TextComponent text_4
      letterHeight = 0.1
      pos = (-.2, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $hist3
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    TextComponent text_5
      letterHeight = 0.1
      pos = (-.3, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $hist4
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    TextComponent text_6
      letterHeight = 0.1
      pos = (-.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $hist5
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    TextComponent text_7
      letterHeight = 0.1
      pos = (-.5, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $hist6
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    TextComponent text_8
      letterHeight = 0.1
      pos = (-.6, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $hist7
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  Routine Thanks
    TextComponent text
      font = Latin Modern Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Koniec tej części badania.
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    KeyboardComponent key_resp_4
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction_m
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent intrukcja_m
      image = instrukcja_m/instrukcja.png
      size = (1.25, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        instrucitonCondition = expInfo['sex']
  Routine Instruction2_k
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_3
      image = instrukcja2_k/instrukcja2.png
      size = (1.25, 1)
      startVal [time (s)] = 0.0
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  Routine Instruction
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_2
      image = resources/instruction_m.png
      size = (1.25, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['Sex'] == 'female':
            instruction_file_path = 'instruction_k.png'
        else:
            instruction_file_path = 'instruction_m.png'
  Routine Instruction2
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image = resources/instruction2_m.png
      size = (1.25, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['Sex'] == 'female':
            instruction_file_path2 = 'instruction2_k.png'
        else:
            instruction_file_path2 = 'instruction2_m.png'
  Routine Instruction3
    ImageComponent image_4
      image = resources/instruction3_m.png
      size = (1.25, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    TextComponent text_9
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every frame]:
        $id
    TextComponent text_10
      letterHeight = 0.1
      pos = (-.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $left
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    TextComponent text_11
      letterHeight = 0.1
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $right
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    KeyboardComponent key_resp_7
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = first key
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if (trials_2.thisN - trials_2.thisIndex) % 2:
            left = series_0
            right = series_1
        else:
            left = series_1
            right = series_0
  Routine Part1
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Część 1
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  Routine Part2
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Część 2
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Flow
  Routine Instruction
  Routine Part1
  Routine Instruction3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = resources/compare_data.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('id', 1), ('series_0', 'OOOOOOO'), ('series_1', 'OOOOOOR'), ('acss_0', 18.527390041484), ('acss_1', 19.6252161347983), ('comparison', 'series_1')]),
      OrderedDict([('id', 2), ('series_0', 'OOOOORO'), ('series_1', 'OOOOORR'), ('acss_0', 19.9225356742592), ('acss_1', 20.740506282542), ('comparison', 'series_1')]),
      OrderedDict([('id', 3), ('series_0', 'OOOOROO'), ('series_1', 'OOOOROR'), ('acss_0', 20.4305117518481), ('acss_1', 21.0293622350521), ('comparison', 'series_1')]),
      OrderedDict([('id', 4), ('series_0', 'OOOORRO'), ('series_1', 'OOOORRR'), ('acss_0', 20.909865233072), ('acss_1', 21.7492261913719), ('comparison', 'series_1')]),
      OrderedDict([('id', 5), ('series_0', 'OOOROOO'), ('series_1', 'OOOROOR'), ('acss_0', 19.914020154082), ('acss_1', 21.2122302124215), ('comparison', 'series_1')]),
      OrderedDict([('id', 6), ('series_0', 'OOORORO'), ('series_1', 'OOORORR'), ('acss_0', 20.879638193258398), ('acss_1', 21.9921709036991), ('comparison', 'series_1')]),
      OrderedDict([('id', 7), ('series_0', 'OOORROO'), ('series_1', 'OOORROR'), ('acss_0', 21.1238393194748), ('acss_1', 21.3856261714514), ('comparison', 'series_1')]),
      OrderedDict([('id', 8), ('series_0', 'OOORRRO'), ('series_1', 'OOORRRR'), ('acss_0', 21.6194508003211), ('acss_1', 21.8990169988695), ('comparison', 'series_1')]),
      OrderedDict([('id', 9), ('series_0', 'OOROOOO'), ('series_1', 'OOROOOR'), ('acss_0', 19.914020154082), ('acss_1', 20.898231922779697), ('comparison', 'series_1')])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
    Routine trial2
  LoopTerminator trials_2
  Routine Part2
  Routine Instruction2
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 120
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    Routine trial
  LoopTerminator trials
